WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Initialization(Description=Sarah)
    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSettings(Path=PE_session.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RandomSeed)
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.DefaultEncoderGain)
    -> Take(Count=1)
    -> BehaviorSubject DefaultEncoderGain

    GroupWorkflow VariableDeclaration
        BehaviorSubject<AutomaticGenerators.StimControl> WallVisibilityEvent

        StringProperty => #1
        StringProperty => #2
        #1, #2 -> Zip
        -> IgnoreElements
        -> BehaviorSubject LogFrameEvent

    GroupWorkflow TrialSampling
        GroupWorkflow ListMode => #0
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text=ListMode) => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=List))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow ShuffledListMode => #1
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Shuffle))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials => #7
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            SubscribeSubject RngSeed => #8
            #7, #8 -> Bonsai.Numerics.Permutation
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow BlockMode => #2
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation BlockMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Block))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany BuildTrials
                SubscribeSubject SessionSettings
                -> Take(Count=1)
                -> BuildTrialsFromBlock(Random="")
                -> WorkflowOutput
            -> WorkflowOutput
        #0, #1, #2 -> Merge
        -> Take(Count=1)
        -> AsyncSubject TrialList
        -> WorkflowOutput

    BooleanProperty(Value=true)
    -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> PublishSubject StartExperiment

    AutomaticGenerators.OptoStimProtocol(Delay=0, Location=0, WaveformIndex=0, AbortDelay=0)
    -> Take(Count=1)
    -> BehaviorSubject GiveOptoStim

    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime) => #23
    DoubleProperty(Value=0) => #24
    #23, #24 -> Merge
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject CurrentTimeInSession

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject AbortOptoStim

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.WaveformBankPath)
    -> Merge
    -> CreateObservable LoadWaveform
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject FilePath

        SubscribeSubject FilePath
        -> PropertyMapping(Path)
        -> Bonsai.Dsp.MatrixReader(Path=Assets\\Waveforms\\wf1.bin, Offset=0, SampleRate=0, ChannelCount=1, BufferLength=0, Depth=F32, Layout=RowMajor)
        -> WorkflowOutput
    -> Concat
    -> ToArray
    -> AsyncSubject WaveformBank

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.TextureBankPath)
    -> Merge
    -> CreateObservable LoadTexture
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Path

        SubscribeSubject Path
        -> PropertyMapping(FileName)
        -> Bonsai.Shaders.LoadImage
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Assets\\Textures\\null.png
          ColorType=Unchanged
          FlipMode=Vertical
        -> WorkflowOutput
    -> Concat
    -> ToArray
    -> AsyncSubject TextureBank

Annotation(Text="")
-> GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> Format(Format={0}/{1}, Selector="Metadata.RootPath,Metadata.AnimalId")
    -> Take(Count=1)
    -> Timestamp
    -> Format(Format={0}/{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp.UtcDateTime")
    -> AsyncSubject SessionRootPath

    GroupWorkflow LogFrameEvents
        GroupWorkflow TimestampLogger
            SubscribeSubject LogFrameEvent => #0
            SubscribeSubject FrameCounter => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item2 as Frame,
                Item1.Item1 as EventName,
                Item1.Item2 as EventData
                )
            -> PublishSubject FrameEventLogger
            -> WorkflowOutput

        Annotation(Text="List of all events to be logged using frame number")
        -> GroupWorkflow ListFrameEvents
            SubscribeSubject LickEvent => #0
            -> StringProperty(Value=Lick) => #1
            #0 -> StringProperty(Value=0) => #2
            #1, #2 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveReward => #5
            -> StringProperty(Value=Reward) => #6
            #5 -> StringProperty(Value=0) => #7
            #6, #7 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveOptoStim => #10
            -> StringProperty(Value=OptoStim) => #11
            #10 -> Format(Format={0}, Selector=WaveformIndex) => #12
            #11, #12 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject TeleportTo => #15
            -> StringProperty(Value=Teleport) => #16
            #15 -> StringProperty(Value=0) => #17
            #16, #17 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject TeleportOnLickTo => #20
            -> StringProperty(Value=TeleportOnLick) => #21
            #20 -> StringProperty(Value=0) => #22
            #21, #22 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject WallVisibilityEvent => #25
            -> StringProperty(Value=WallVisibility) => #26
            #25 -> Format(Format=L{0}R{1}, Selector="StimTextureLeft,StimTextureRight") => #27
            #26, #27 -> Zip
            -> MulticastSubject LogFrameEvent

            SubscribeSubject LogFrameEvent
            -> WorkflowOutput

    GroupWorkflow Loggers
        SubscribeSubject AI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=AnalogInput.bin)

        SubscribeSubject DI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=DigitalInput.bin)

        SubscribeSubject FrameCounter
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=FrameCounter.csv)

        SubscribeSubject QuadSyncEvent => #6
        SubscribeSubject FrameCounter => #7
        #6, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(it.Item1 as QuadValue,
            it.Item2.Index as Index,
            it.Item2.Time as Time)
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=QuadSynch.csv)

        SubscribeSubject RotaryEncoderPosition
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=RotaryEncoder.csv)

        SubscribeSubject CurrentPosition => #13
        SubscribeSubject FrameCounter => #14
        #13, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1.Z as Position,
            it.Item2.Index as Index,
            it.Item2.Time as Time
            )
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=VrPosition.csv)

        SubscribeSubject FrameEventLogger
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=FrameEvents.csv)

        SubscribeSubject PupilCamera
        -> IncludeWorkflow(Path=Extensions\LoggerCamera.bonsai, CameraName=PupilCamera)

        SubscribeSubject BodyCamera
        -> IncludeWorkflow(Path=Extensions\LoggerCamera.bonsai, CameraName=BodyCamera)

        SubscribeSubject SessionSettings
        -> Serialize
        -> IncludeWorkflow(Path=Extensions\LoggerYaml.bonsai, FileName=SessionSettings.yaml)

        BehaviorSubject<AutomaticGenerators.Trial> TrialLogger
        -> Serialize
        -> IncludeWorkflow(Path=Extensions\LoggerYaml.bonsai, FileName=TrialLogging.yaml)

GroupWorkflow RenderConfig
    Bonsai.Shaders.CreateWindow
      Width=500
      Height=500
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml)
    -> Take(Count=1) => #5
    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml)
    -> Take(Count=1) => #7
    #5, #7 -> Merge
    -> ToArray
    -> AsyncSubject ScreenCalibrationSettings

    Bonsai.Shaders.RenderFrame => #11
    SubscribeSubject StartExperiment => #12
    #11, #12 -> SubscribeWhen
    -> PublishSubject RenderFrameEvent
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=2, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #17
    SubscribeSubject ScreenCalibrationSettings
    -> Index(Operand=IntProperty(Value=0))
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #20
    #17, #20 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.6, Height=0.34, Rotation(X=0, Y=40.10704565915762, Z=0), Translation(X=0.4, Y=-0.01, Z=0.2)) => #21
    Annotation LeftScreen(Text="") => #22
    #21, #22 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1)
    SubscribeSubject ScreenCalibrationSettings
    -> Index(Operand=IntProperty(Value=1))
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #26
    #17, #26 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.6, Height=0.34, Rotation(X=0, Y=-40.10704565915762, Z=0), Translation(X=-0.4, Y=-0.01, Z=0.2)) => #27
    Annotation RightScreen(Text="") => #28
    #27, #28 -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1)
    -> PublishSubject PostDrawing

    SubscribeSubject RenderFrameEvent
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Index as Index,
        Value as Time)
    -> BehaviorSubject FrameCounter

    GroupWorkflow SyncQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateRenderState(RenderState="")
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-8, Right=8, Bottom=-4.5, Top=4.5) => #3
        Int64Property(Value=0)
        -> Take(Count=1) => #5
        ExternalizedMapping(MinimumFrames, MaximumFrames)
        -> Defer RandomToggle
            SubscribeSubject RngSeed => #0
            ExternalizedMapping(Lower(DisplayName=MinimumFrames), Upper(DisplayName=MaximumFrames)) => #1
            #0, #1 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=60, Upper=300)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> AsyncSubject WaitForFrames

            SubscribeSubject PostDrawing
            -> Int64Property(Value=1)
            -> Accumulate
            -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject WaitForFrames
                -> PropertyMapping(Value) => #2
                #0, #2 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=226))
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Int64Property(Value=1)
        -> Repeat => #9
        #5, #9 -> Concat
        -> Accumulate
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> BehaviorSubject QuadSyncEvent
        -> PropertyMapping(ColorR, ColorG, ColorB) => #14
        #3, #14 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.5
          ExtentY=1
          LocationX=-0.302325577
          LocationY=4
          Layer=10
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1
        -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow NIDAQ
        GroupWorkflow AnalogOutput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=30000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=1500) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AO_Settings

            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferLength(Selector=BufferSize))
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=1500, Frequency=50, Waveform=Square, SampleRate=30000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject AO_Clock

            SubscribeSubject AO_Generation => #12
            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferSize(Selector=BufferSize)) => #14
            #12, #14 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=30000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=1500
              Channels(AnalogOutputChannelConfiguration(ChannelName=OptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

            GroupWorkflow OptoStimWaveform
                Defer Constant => #0
                    SubscribeSubject AO_Clock => #0
                    SubscribeSubject AO_Settings => #1
                    -> MemberSelector(Selector=BufferSize) => #2
                    #1 -> IntProperty(Value=1) => #3
                    #2, #3 -> Zip
                    -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
                    #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=1500, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> WorkflowOutput
                SubscribeSubject GiveOptoStim
                -> Skip(Count=1) => #2
                #0, #2 -> TakeUntil => #3
                SubscribeSubject GiveOptoStim
                -> MemberSelector(Selector=WaveformIndex)
                -> Take(Count=1)
                -> InputMapping(StimId(Selector=it))
                -> SelectMany PlayWaveform => #8
                    SubscribeSubject WaveformBank => #0
                    ExternalizedMapping(Value(DisplayName=StimId)) => #1
                    #0, #1 -> Index(Operand=IntProperty(Value=0))
                    -> Take(Count=1)
                    -> AsyncSubject ThisWaveform

                    Annotation
                      Text: The idea of this workflow is to check how many times the incoming stored waveform "fits" inside each of the Clock buffers. Next, we round it up, and pad the remaining pixels with 0 using the IplImage operator.
                    -> GroupWorkflow PadWaveform
                        SubscribeSubject ThisWaveform => #0
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Width) => #2
                        SubscribeSubject AO_Settings
                        -> MemberSelector(Selector=BufferSize) => #4
                        #2, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform PaddingSize => #6
                          Expression: Convert.ToInt32(Math.Ceiling((Item1 *1.0) / Item2)) * Item2
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Height) => #8
                        #6, #8 -> Zip
                        -> PropertyMapping(Size(Selector="Item1, Item2")) => #10
                        #0, #10 -> Bonsai.Vision.ResizeCanvas(Size(Width=1500, Height=1), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset(X=0, Y=0))
                        -> Bonsai.Dsp.ConvertToMat
                        -> Take(Count=1)
                        -> AsyncSubject PaddedWaveform
                        -> WorkflowOutput

                    SubscribeSubject PaddedWaveform => #7
                    SubscribeSubject AO_Settings
                    -> MemberSelector(Selector=BufferSize) => #9
                    #7, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item1) => #11
                    SubscribeSubject AO_Settings
                    -> PropertyMapping(Count(Selector=BufferSize), Skip(Selector=BufferSize)) => #13
                    #11, #13 -> Bonsai.Dsp.Buffer(Count=1500, Skip=1500) => #14
                    SubscribeSubject AO_Clock => #15
                    #14, #15 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                SubscribeSubject AbortOptoStim
                -> Skip(Count=1) => #10
                #8, #10 -> TakeUntil => #11
                #3, #11 -> Concat
                -> Repeat
                -> WorkflowOutput
            -> BehaviorSubject AO_Generation

        GroupWorkflow AnalogInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=1000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=10) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AI_Settings

            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #10
            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #13
            #10, #13 -> Bonsai.DAQmx.AnalogInputTriggered
              SignalSource=""
              DigitalTriggerSource=di/StartTrigger
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10
              SamplesPerChannel=nil
              Channels
                AnalogInputChannelConfiguration(ChannelName=LickDetector, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photostimulation, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
            -> PublishSubject AI_Data

        GroupWorkflow DigitalInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=3000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=100) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject DI_Settings

            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #10
            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #13
            #10, #13 -> Bonsai.DAQmx.DigitalInput
              SignalSource=""
              SampleRate=3000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=100
              SamplesPerChannel=nil
              Channels(DigitalInputChannelConfiguration(ChannelName=DigitalInputs, Grouping=OneChannelForAllLines, Lines=Dev1/port0/line0:7))
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.2S)
            -> PublishSubject DI_Data

        GroupWorkflow PwmGenerator => #3
            SubscribeSubject CameraFPS
            -> PropertyMapping(Frequency)
            -> Bonsai.DAQmx.CounterOutput(Channel=Dev1/ctr0, TriggerSource="", Frequency=30, DutyCycle=0.5, NumberOfSamples=nil)
            -> IntProperty(Value=0)
            -> WorkflowOutput
        SubscribeSubject StartExperiment => #4
        #3, #4 -> SubscribeWhen

        GroupWorkflow RotaryEncoder
            Bonsai.Shaders.UpdateFrame
            -> Bonsai.DAQmx.RotaryEncoderInput(Channel=Dev1/ctr1, DecoderType=X1, TicksPerRevolution=1000, StartingRadians=0, ResetOnZ=false) => #1
            SubscribeSubject RenderFrameEvent
            -> ElementIndex => #3
            -> MemberSelector(Selector=Index) => #4
            #3 -> MemberSelector(Selector=Value.TimeStep.ElapsedRealTime)
            -> Accumulate => #6
            #4, #6 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as RotaryEncoder,
                Item2.Item1 as FrameIndex,
                Item2.Item2 as RenderElapsedTime)
            -> PublishSubject RotaryEncoderPosition
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            BehaviorSubject<AutomaticGenerators.RewardProtocol> GiveReward
            -> SelectMany DetermineRewardAmount => #1
                WorkflowInput Source1 => #0
                SubscribeSubject RngSeed
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #3
                #0, #3 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item2 > Item1.ProbabilityHigh ? Item1.AmountLow : Item1.AmountHigh
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardCalibration) => #3
            #1, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform CalibrateValue
              Expression: Item1 * Item2.Intercept + Item2.Slope
            -> Bonsai.Dsp.Rescale(Min=0.0001, Max=0.9999, RangeMin=0.0001, RangeMax=0.9999, RescaleType=Clamp)
            -> InputMapping(HighTime(Selector=it))
            -> CreateObservable GiveReward
                ExternalizedMapping(InitialDelay, LowTime, HighTime, NumberOfPulses, Channel)
                -> Bonsai.DAQmx.PulseOutput(Channel=Dev1/ctr3, InitialDelay=0, LowTime=0.1, HighTime=0.05, NumberOfPulses=1)
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput

    GroupWorkflow Cameras
        IntProperty(Value=30)
        -> Take(Count=1)
        -> AsyncSubject CameraFPS

        SubscribeSubject CameraFPS
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (1.0 / it) *1000000 - 3000
        -> PropertyMapping(ExposureTime) => #5
        ExternalizedMapping(SerialNumber(DisplayName=PupilCameraSerialNumber)) => #6
        #5, #6 -> MySpinnakerCapture(Index=nil, SerialNumber=23319722, ColorProcessing=Default, ExposureTime=30333.333333333336, Gain=0, Binning=2)
        -> PublishSubject PupilCamera

        SubscribeSubject CameraFPS
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (1.0 / it) *1000000 - 3000
        -> PropertyMapping(ExposureTime) => #11
        ExternalizedMapping(SerialNumber(DisplayName=BodyCameraSerialNumber)) => #12
        #11, #12 -> MySpinnakerCapture(Index=nil, SerialNumber=23315309, ColorProcessing=Default, ExposureTime=30333.333333333336, Gain=0, Binning=2)
        -> PublishSubject BodyCamera

    GroupWorkflow PostProcessing
        GroupWorkflow LickSensor
            SubscribeSubject AI_Data
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> PublishSubject LickSensor

            SubscribeSubject LickSensor
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0.4585635359116022, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Merge
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> DistinctUntilChanged
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.06S) => #11
            #10, #11 -> Gate
            -> PublishSubject LickEvent

GroupWorkflow PositionUpdates
    FloatProperty(Value=0)
    -> Take(Count=1) => #1
    Bonsai.Shaders.Input.KeyDown(Key=F2, Modifiers=nil)
    -> FloatProperty(Value=0) => #3
    BehaviorSubject<AutomaticGenerators.TeleportProtocol> TeleportTo
    -> MemberSelector(Selector=Destination)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression: Convert.ToSingle(it)
    BehaviorSubject<AutomaticGenerators.TeleportOnLickProtocol> TeleportOnLickTo
    -> MemberSelector(Selector=Destination)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
      Expression: Convert.ToSingle(it)
    #1, #3, #6, #9 -> Merge => #10
    ExternalizedMapping(PositionMax, PositionMin) => #11
    #10, #11 -> CreateObservable ResetPosition
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TeleportPosition

        ExternalizedMapping(Value(DisplayName=PositionMin))
        -> FloatProperty(Value=-0.2) => #4
        ExternalizedMapping(Value(DisplayName=PositionMax))
        -> FloatProperty(Value=12) => #6
        #4, #6 -> CombineLatest
        -> BehaviorSubject PositionBounds

        SubscribeSubject TeleportPosition
        -> Take(Count=1) => #10
        SubscribeSubject DisplacementUpdate => #11
        SubscribeSubject TeleportPosition => #12
        #11, #12 -> Scan => #13
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject PositionBounds => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: it.Item1 < it.Item2.Item1 ? it.Item2.Item1 : (it.Item1 > it.Item2.Item2 ? it.Item2.Item2 : it.Item1)
            #7, #4 -> Zip
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #10, #13 -> Concat
        -> WorkflowOutput
    -> Switch
    -> InputMapping(Z(Selector=it)) => #14
    ExternalizedMapping(Y(DisplayName=DefaultY), X(DisplayName=DefaultX)) => #15
    #14, #15 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.2, Z=5)
    -> BehaviorSubject CurrentPosition

    BooleanProperty(Value=true)
    -> BehaviorSubject EnableDisplacementUpdates

    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1) => #22
    SubscribeSubject DefaultEncoderGain
    -> PropertyMapping(Value) => #24
    #22, #24 -> Multiply(Operand=FloatProperty(Value=0.001)) => #25
    Disable Bonsai.Shaders.Input.MouseWheel
    -> Disable MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Disable Multiply(Operand=FloatProperty(Value=0.05)) => #28
    #25, #28 -> Disable Merge
    -> Condition EnableUpdates
        SubscribeSubject EnableDisplacementUpdates
        -> WorkflowOutput
    -> InputMapping(Value(Selector=it))
    -> FloatProperty(Value=0.001) => #32
    Bonsai.Shaders.UpdateFrame => #33
    BehaviorSubject<System.Single> PassiveUpdateGain
    -> PropertyMapping(Value) => #35
    #33, #35 -> FloatProperty(Value=0) => #36
    #32, #36 -> Merge
    -> PublishSubject DisplacementUpdate

Annotation(Text="")
-> GroupWorkflow TrialLogic => #8
    ExternalizedMapping(Value(DisplayName=CorridorHeight))
    -> FloatProperty(Value=0.5) => #1
    ExternalizedMapping(Value(DisplayName=CorridorWidth))
    -> FloatProperty(Value=1) => #3
    #1, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.Item1 as Height,
        it.Item2 as Width,
        it.Item1 * 0.5 as HeightOffset,
        it.Item2 * 0.5 as WidthOffset)
    -> Take(Count=1)
    -> AsyncSubject CorridorSpecs

    SubscribeSubject TrialList
    -> Merge
    -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisTrial
        -> MulticastSubject TrialLogger

        GroupWorkflow Trial
            PublishSubject<System.Reactive.Unit> EndTrial
            -> Take(Count=1)
            -> WorkflowOutput

            GroupWorkflow DrawTrial
                Annotation DrawFloors(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=FloorSegments)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\DrawFloorSegment.bonsai)
                -> Merge

                Annotation DrawSegments(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=CorridorSegments)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
                -> ReplaySubject TrialSegments(BufferSize=nil)
                -> Count
                -> AsyncSubject NumberOfSegments

                SubscribeSubject TrialSegments
                -> Merge
                -> BehaviorSubject SegmentEvents

            GroupWorkflow TrialLogic
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Teleport)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Teleport.bonsai)
                -> Merge
                -> Unit
                -> MulticastSubject EndTrial

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=PassiveMode)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\ControlPassiveGain.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Reward)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Reward.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=OptoStim)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\OptoStim.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=TeleportOnLick)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\TeleportOnLick.bonsai)
                -> Merge
        -> GroupWorkflow ResetState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject PassiveUpdateGain
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject ThisTrial
        -> MulticastSubject CurrentTrial
    -> Concat
SubscribeSubject StartExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #10
#8, #10 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow Visualizers
    SubscribeSubject FrameEventLogger => #0
    -> Condition Lick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Lick))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
      Expression:
        new(
        Double.NaN as Reward,
        1.0 as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Reward
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Reward))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression:
        new(
        2.0 as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition OptoStim
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=OptoStim))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        3.0 as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Teleport
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value(DisplayName=Event1)) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Teleport)) => #3
        #0 -> MemberSelector(Selector=EventName) => #4
        ExternalizedMapping(Value(DisplayName=Event2)) => #5
        #4, #5 -> Equal(Operand=StringProperty(Value=TeleportOnLick)) => #6
        #3, #6 -> Zip
        -> BitwiseOr
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        4.0 as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition WallVisibility
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=WallVisibility))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        5.0 as WallVisibility,
        Frame.Time as Time
        )
    #2, #4, #6, #8, #10 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Time, ValueSelector="Lick,Reward,OptoStim,Telepoprt,WallVisibility", SymbolType=Circle, LineWidth=0, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #13
    SubscribeSubject FrameEventLogger
    -> VisualizerMapping => #15
    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #19
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #23
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> VisualizerMapping => #26
    BehaviorSubject<AutomaticGenerators.Trial> CurrentTrial
    -> MemberSelector(Selector=TrialTypeLabel)
    -> ElementIndex => #29
    SubscribeSubject CurrentTimeInSession => #30
    #29, #30 -> WithLatestFrom
    -> Format(Format="Trial {0}: {1} @ {2}", Selector="Item1.Index,Item1.Value,Item2")
    -> VisualizerMapping => #33
    SubscribeSubject PupilCamera
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping => #36
    SubscribeSubject BodyCamera
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping => #39
    #13, #15, #19, #23, #26, #33, #36, #39 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=4, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow OnlineVariables
    ExternalizedMapping(Value(DisplayName=WheelGain))
    -> FloatProperty(Value=0.001)
    -> Skip(Count=1)
    -> MulticastSubject DefaultEncoderGain

    Bonsai.Shaders.Input.KeyDown(Key=A, Modifiers=nil)
    -> FloatProperty(Value=5E-05) => #5
    Bonsai.Shaders.Input.KeyDown(Key=D, Modifiers=nil)
    -> FloatProperty(Value=-5E-05) => #7
    #5, #7 -> Merge => #8
    ExternalizedMapping(Value(DisplayName=KeyDownGain)) => #9
    #8, #9 -> Multiply(Operand=FloatProperty(Value=1)) => #10
    SubscribeSubject DefaultEncoderGain => #11
    #10, #11 -> WithLatestFrom
    -> Add
    -> MulticastSubject DefaultEncoderGain

Disable GroupWorkflow Debug
    Bonsai.Windows.Input.KeyDown(Filter=T, SuppressRepetitions=true)
    -> IntProperty(Value=0)
    -> MulticastSubject GiveOptoStim
    -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown(Filter=Y, SuppressRepetitions=true)
    -> BooleanProperty(Value=false)
    -> MulticastSubject AbortOptoStim
