<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CameraName" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>LogCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CameraName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PupilCamera</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameID,Timestamp</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_CameraMetadata.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoggerCsv.bonsai">
              <FileName>RotaryEncoder.csv</FileName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_CameraVideo.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFPS</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FrameRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoggerVideo.bonsai">
              <FileName />
              <FrameRate>30</FrameRate>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="21" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>