<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha012"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SampleRate" />
        <Property Name="Frequency" />
        <Property Name="Amplitude" />
        <Property Name="WaveDuration" />
        <Property Name="PulseDuration" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>PulseGenerator</Name>
        <Description>Generates a square pulse waveform using the specified parameters.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SampleRate" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="dsp:FunctionGenerator,sys:Int32">
              <MemberName>SampleRate</MemberName>
              <Value>1000</Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SampleRate</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Frequency" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="dsp:FunctionGenerator,sys:Double">
              <MemberName>Frequency</MemberName>
              <Value>5</Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Frequency</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Amplitude" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="dsp:FunctionGenerator,sys:Double">
              <MemberName>Amplitude</MemberName>
              <Value>1</Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Amplitude</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WaveDuration" Description="The duration of the pulse waveform, in seconds." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WaveDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PulseDuration" Description="The duration of each pulse, in seconds." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.02</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PulseDuration</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleRate</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SampleRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SampleRate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WaveDuration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Frequency</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>1000</dsp:BufferLength>
                <dsp:Frequency>5</dsp:Frequency>
                <dsp:Waveform>Triangular</dsp:Waveform>
                <dsp:SampleRate>1000</dsp:SampleRate>
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Amplitude>0.5</dsp:Amplitude>
                <dsp:Offset>0.5</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Amplitude</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="MaxValue" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PulseDuration</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Frequency</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ThresholdValue" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Threshold">
                <dsp:ThresholdValue>0.1</dsp:ThresholdValue>
                <dsp:MaxValue>1</dsp:MaxValue>
                <dsp:ThresholdType>BinaryInv</dsp:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="24" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="24" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source3" />
            <Edge From="24" To="32" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="32" Label="Source2" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source3" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>