<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ValveTimeOn" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>AO_Clock</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AO_Settings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SamplingRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SampleRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AO_Settings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BufferSize</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>3000</dsp:BufferLength>
                <dsp:Frequency>0.1</dsp:Frequency>
                <dsp:Waveform>Sawtooth</dsp:Waveform>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Amplitude>0.5</dsp:Amplitude>
                <dsp:Offset>0.5</dsp:Offset>
                <dsp:Phase>3.14159265358979</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" DisplayName="ValveTimeOn" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Threshold">
                <dsp:ThresholdValue>0.01</dsp:ThresholdValue>
                <dsp:MaxValue>5</dsp:MaxValue>
                <dsp:ThresholdType>BinaryInv</dsp:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AO_Settings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NumBuffersPerSecond</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>