<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>TeleportOnLick</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Count</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LickEvent</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentPosition</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1 &gt;= it.Item2.LocationStart and it.Item1 &lt; it.Item2.LocationEnd</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>InActiveArea?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TeleportOnLickTo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAction</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RefractoryDuration</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Count++</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Count</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Count</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CheckMaxRepeats</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisAction</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MaxRepeats</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>CloseObservable</Name>
                    <Text><![CDATA[If the value is null, assume no max repeats are set, otherwise, check if the current value is equal to max repeats and close the observable if such is true.]]></Text>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>HasValue</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.HasValue</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1,Item2.Value</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>